---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 30
set font_italic no
set font_family Lexend
set font_bold no
set experiment_path "/Users/eragon/Documents/CODE/Github/group-project-team-studysmart"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#e8edf1"

define sequence distraction_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_distraction_1 always

define loop distraction_task
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run distraction_sequence

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run slimstampen_setup always
	run instructions always
	run learning_session_setup always
	run while_there_is_time_left always
	run save_data always
	run distraction_task always

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="Welcome to StudySmart!<br />In a moment, you will be presented with sentences and words. <br /><br />If you are presented with a sentence, please translate the word in bold to English. <br /><br />If you are presented with a word, please translate the word to English. <br /><br />Press any key to begin." x=0 y=0 z_index=0

define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	#var.session_duration = 10000
	var.session_duration = 5000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=50 html=yes show_if=always text="Count the number of purple dots" x=0 y=-320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=1 html=yes show_if=always text="." x=-288 y=-64 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-480 x2=160 y1=0 y2=-160 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-64 x2=320 y1=-32 y2=96 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-160 x2=64 y1=256 y2=192 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-256 x2=192 y1=96 y2=192 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=32 x2=384 y1=288 y2=-32 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-256 x2=352 y1=192 y2=-128 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-224 x2=224 y1=-96 y2=416 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-256 x2=128 y1=288 y2=-288 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=288 x2=-480 y1=64 y2=-96 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-352 x2=-256 y1=128 y2=-224 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-128 x2=-64 y1=-192 y2=256 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-352 x2=320 y1=192 y2=-192 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=288 x2=-256 y1=160 y2=-64 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-288 x2=288 y1=64 y2=-64 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=416 x2=384 y1=-192 y2=288 z_index=0
	draw line color="#000000" penwidth=1 show_if=always x1=-416 x2=352 y1=256 y2=320 z_index=0
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	draw line color="#ffff00" penwidth=1 show_if=always x1=-320 x2=320 y1=-160 y2=192 z_index=0
	draw line color="#ffff00" penwidth=1 show_if=always x1=-384 x2=-160 y1=128 y2=224 z_index=0
	draw line color="#ffff00" penwidth=1 show_if=always x1=-64 x2=96 y1=288 y2=64 z_index=0
	draw line color="#ffff00" penwidth=1 show_if=always x1=-128 x2=192 y1=-128 y2=0 z_index=0
	draw line color="#ffff00" penwidth=1 show_if=always x1=224 x2=320 y1=160 y2=-32 z_index=0
	draw line color="#ffff00" penwidth=1 show_if=always x1=32 x2=160 y1=-192 y2=32 z_index=0
	draw line color="#ffff00" penwidth=1 show_if=always x1=-320 x2=-32 y1=64 y2=96 z_index=0

define inline_script present_distraction
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script present_distraction_1
	set description "Executes Python code"
	___run__
	# Textbox coordinates
	n1 = -125,300
	n2 = 125,300
	n3 = 125,250
	n4 = -125,250
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
		
	prompt = 'Count the number of blue dots'
	nr_of_dots = random.randint(20,40)
	nr_distract = random.randint(10,30)
	dot = u'\u2022'
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30, y = -250)
	for i in range(nr_of_dots):
		f_size = random.randint(20,50)
		y_random = random.randint(-200,200)
		x_random = random.randint(-400,400)
		my_canvas.text(dot, font_size = f_size, y = y_random, x = x_random, color='blue')
			
	for i in range(nr_distract):
		f_size = random.randint(20,50)
		y_random = random.randint(-200,200)
		x_random = random.randint(-400,400)
		my_canvas.text(dot, font_size = f_size, y = y_random, x = x_random, color='red')
			
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=275, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30, y=-250)
	
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 275)
	
		my_canvas.prepare()
		my_canvas.show()
		print(m.responses)
		
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	__end__
	set _prepare ""

define inline_script present_trial
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Textbox coordinates
	n1 = -125,125
	n2 = 125,125
	n3 = 125,75
	n4 = -125,75
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
	num_words_tested = 0
	num_tested_correct = 0
	
	def is_a_test(x): #check if its a word not a sentence
		return len(x.split(" ")) ==1
		
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	#prompt = next_fact.question
	prompt = next_fact.chosen_context
	answer = next_fact.answer.split(";") #delimiter ;
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30)
	#if new:
	#	my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=100, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
	#	if new:
	#		my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 100)
	
		#my_canvas['achi'] = polygon([a1, a2, a3, a4], fill=True, color="white")
		my_canvas.prepare()
		my_canvas.show()
		print(m.responses)
		
	
	
	# Check if the response is correct
	if [keyboard_response == x for x in answer].count(True) >0:
		correct = True
	else:
		correct = False
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	m.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color=feedback_color)
	my_canvas.text(keyboard_response, y = 100, color="white")
	if is_a_test(prompt) == True:
		my_canvas.polygon([a1, a2, a3, a4], fill=True, color="white")
		num_words_tested += 1
	
	def create_statistics(responses):
		dat_resp = pd.DataFrame(responses)
		dat_facts = pd.DataFrame([r.fact for r in responses])
		dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
		# Add column for rate of forgetting estimate after each observation
		#dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
		#dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
		#dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
		# dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
		dat.drop(columns = "fact", inplace = True)
	
		# Add trial number column
		dat.index.name = "trial"
		dat.index = dat.index + 1
	
		return dat
	
	def achievement(responses,num_words_tested,num_tested_correct):
		"""
		All stats for user achievements
		"""
		dat = create_statistics(responses)
		correct, wrong = 0,0
		try:
			correct, wrong = dat["correct"].value_counts().values
		except:
			correct = dat["correct"].value_counts()
		mean_correct = correct/(correct+wrong)
		mean_wrong = wrong/(correct+wrong)
		
		correct = num_tested_correct
		wrong = num_words_tested - num_tested_correct
		return f"{int(correct)}/{int(num_words_tested)} so far!!"
	
		# return f"""
		#     Trial Index : {str(dat.index)}\r
		#     Total Correct : {correct}\r
		#     Total Wrong : {wrong}\r
		#     Mean Correct : {mean_correct}\r
		#     Mean Wrong : {mean_wrong}\r
		#     """
	ach = None
	try:
		ach = achievement(m.responses, num_words_tested,num_tested_correct)
	except Exception as e:
		print(e)
	if ach!=None and is_a_test(prompt) == True:
		my_canvas.text(ach, y = -175)
	
	if correct:
		my_canvas.text("Correct!", y=150, color="green")
		if is_a_test(prompt) == True:
			num_tested_correct+=1
	if not correct:
		my_canvas.text(answer[0], y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script save_data
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data()
	log.write(dat)
	__end__
	set _prepare ""

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	import pandas as pd
	m = UIFeatures()
	# df = pd.read_table("./vocabulary_marked.csv", names=["id","context_1", "context_2", "answer"], index_col=0, sep = ",", lineterminator='\n')
	df = pd.read_csv(pool[u"vocabulary_marked.csv"])
	for row in df.itertuples():
	    m.add_fact(Fact(fact_id = row.id, context_1= row.context_1, context_2 =row.context_2, answer=row.answer, chosen_context=row.context_1, question=row.question, encounter_2=False))
	
	# Add some study facts to the model (you could also read them from a CSV file)
	# facts = [Fact(1, "hello", "bonjour"),
	# 		Fact(2, "dog", "chien"),
	# 		Fact(3, "cat", "chat"),
	# 		Fact(4, "computer", "ordinateur"),
	# 		Fact(5, "house", "maison"),
	# 		Fact(6, "car", "voiture"),
	# 		Fact(7, "fish", "poisson"),
	# 		Fact(8, "bottle", "bouteille")]
	
	
			# facts = [Fact(fact_id=1, question='vergeten', context_1="Ben je nou alweer je sleutel 'vergeten'?", context_2="Sorry, we waren 'vergeten' de wiki aan te passen.", answer='forget', chosen_context="Ben je nou alweer je sleutel 'vergeten'?"),
	#  Fact(fact_id=2, question='vervelend', context_1="Ik vind het 'vervelend' als de koffie op is.", context_2="Doe eens niet zo 'vervelend'.", answer='annoying', chosen_context="Ik vind het 'vervelend' als de koffie op is."),
	#  Fact(fact_id=3, question='algemeen', context_1="Dat is niet 'algemeen' bekend.", context_2="Over het 'algemeen' ben ik hier heel goed in.", answer='general', chosen_context="Dat is niet 'algemeen' bekend."),
	#  Fact(fact_id=4, question='matig', context_1="De burger smaakte een beetje 'matig'.", context_2="Ik ben 'matig' enthousiast over deze activiteit.", answer='mediocre', chosen_context="De burger smaakte een beetje 'matig'."),
	#  Fact(fact_id=5, question='verwachten', context_1="Ze 'verwachten' dat het morgen gaat regenen.", context_2="Wij 'verwachten' dat jij het goed gaat doen.", answer='expect', chosen_context="Ze 'verwachten' dat het morgen gaat regenen."),
	#  Fact(fact_id=6, question='gemiddeld', context_1="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar.", context_2="De temperatuur in Nederland is 'gemiddeld' 15 graden.", answer='average', chosen_context="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar."),
	#  Fact(fact_id=7, question='onderdeel', context_1="Ik mis een 'onderdeel' van mijn IKEA kast.", context_2="Deze opleiding is een 'onderdeel' van de Rijksuniversiteit Groningen.", answer='part', chosen_context="Ik mis een 'onderdeel' van mijn IKEA kast."),
	# facts = [Fact(fact_id=8, question='meningen', context_1="Politici hebben altijd veel 'meningen'.", context_2="Ik heb verschillende 'meningen' over dit onderwerp.", answer='opinions', chosen_context="Politici hebben altijd veel 'meningen'."),
	#  Fact(fact_id=9, question='alternatief', context_1="Ik vind thee geen goed 'alternatief' voor koffie.", context_2="Ik heb een 'alternatief' voorstel.", answer='alternative', chosen_context="Ik vind thee geen goed 'alternatief' voor koffie."),
	#  Fact(fact_id=10, question='woordenschat', context_1="Ik heb een goede 'woordenschat'.", context_2="Een boek lezen doet wonderen voor je 'woordenschat'.", answer='vocabulary', chosen_context="Ik heb een goede 'woordenschat'.")]
	
	# for fact in facts:
	# 	m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	import numpy as np
	import re
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	Fact = namedtuple("Fact", "fact_id, question, context_1, context_2, answer, chosen_context, encounter_2")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    WORD_THRESHOLD = 0.29
	    CONTEXT2_THRESHOLD = 0.35
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	    
	    def decide_context(self, fact, current_time):
	        """
	        Changes the cosen context to word if the activation is above the switch threshold, 
	        and back to context if it is below the threshold 
	        """
	        alpha = self.get_rate_of_forgetting(current_time, fact)
	
	        if alpha <= self.WORD_THRESHOLD:
	            fact = fact._replace(chosen_context = fact.question)
	        
	        elif alpha < self.CONTEXT2_THRESHOLD and fact.encounter_2 == False:
	            fact = fact._replace(chosen_context = fact.context_1)
	            
	        
	        else:
	            fact = fact._replace(chosen_context = fact.context_2)
	            self.facts[fact.fact_id-1] = fact._replace(encounter_2 = True)
	
	        return fact
	    
	    
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """ 
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            print("less than 2 facts ")
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a)in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            weakest_fact_info = self.decide_context(weakest_fact[0], current_time)
	            #return((weakest_fact[0], False))
	            return((weakest_fact_info, False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 2:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        #chosen_context_id, chosen_context_found = self.decide_context(response.fact.context_1, response.fact.context_2)
	        # response.fact.chosen_context = chosen_context_id
	        # reading_time = self.get_reading_time(response.fact.question)
	        reading_time = self.get_reading_time(response.fact.chosen_context)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	
	        #chosen_context_id, chosen_context_found = self.decide_context(fact.context_1, fact.context_2)
	        reading_time = self.get_reading_time(fact.chosen_context)
	        # reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    
	class UIFeatures(SpacingModel):
	    """
	    Separating UI Specific Functions in a different class for readability and efficiency
	    """
	    def __init__(self) -> None:
	        super().__init__()
	        # self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_dict = dict(zip(self.vocab_df["question"].values, self.vocab_df["answer"].values)) # word: translation pairs
	        self.reverse_vocab_dict = dict(zip(self.vocab_df["answer"].values, self.vocab_df["question"].values)) # translation:word pairs
	
	    def word_from_context(self, context):
	        """
	        Extract the required word from the context. 
	        Eg:
	        "Deze opleiding heeft 'gemiddeld' 60 studenten per jaar." -> 'gemiddeld'
	        """
	        return re.findall("'.*'", context)[-1].replace("'","")
	    
	    def ret_translated_word(self, word):
	        """
	        Return the translation of the word from the dataframe. eg: English <-> Dutch 
	        """
	        try:
	            return self.vocab_dict[word]
	        except KeyError:
	            return self.reverse_vocab_dict[word]
	        else:
	            print("Wrong word. Not in dict")
	    
	    def ret_translated_context(self, context):
	        """
	        Finds the word from the annotated context and return the translation of the word from the dataframe
	        """
	
	        return self.ret_translated_word(self.word_from_context(context=context))
	    
	    def calc_rof(self,row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	        
	    def calc_reading_time(self,row):
	        return(self.get_reading_time(row["fact"].context_1))
	    
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        dat = self.create_statistics()
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	    
	    def achievement(self):
	        """
	        All stats for user achievements
	        """
	        dat = self.create_statistics()
	        correct, wrong = dat["correct"].value_counts().values
	        mean_correct = correct/(correct+wrong)
	        mean_wrong = wrong/(correct+wrong)
	
	        return f"""
	        \n
	        Trial Index : {dat.index}\r
	        Total Correct : {correct}\r
	        Total Wrong : {wrong}\r
	        Mean Correct : {mean_correct}\r
	        Mean Wrong : {mean_wrong}\r
	        """
	
	
	    def create_statistics(self):
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        # dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
	        dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
	        dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
	        # dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        return dat
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial always

define loop while_there_is_time_left
	set source table
	set repeat 999
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence

