---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 30
set font_italic no
set font_family Lexend
set font_bold no
set experiment_path "C:/Users/julie/Dropbox/CCS/Courses S1/User Models/TeamStudySmart/group-project-team-studysmart"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#e8edf1"

define loop Baseline_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run baseline_sequence

define loop Baseline_task
	set source table
	set repeat 999
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence_1

define loop Context_condition
	set source table
	set repeat 999
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[time_up2] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence

define loop Context_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run context_sequence

define sequence Pre_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run age always
	run language always
	run new_form_multiple_choice always
	run new_logger always
	run instructions_test_level always
	run pre_test always
	run save_data_1 always

define form_text_input age
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var age
	set form_title Age
	set form_question "What is your age? "
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sequence baseline_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions always
	run Baseline_task always
	run instructions_distraction always
	run distraction_task always
	run instructions_test always
	run baseline_test always

define inline_script baseline_setup
	set description "Executes Python code"
	___run__
	import pandas as pd
	m1 = UIFeatures_bs()
	# df = pd.read_table("./vocabulary_marked.csv", names=["id","context_1", "context_2", "answer"], index_col=0, sep = ",", lineterminator='\n')
	df = pd.read_csv(pool[u"vocabulary_marked.csv"])
	for row in df.itertuples():
	    m.add_fact(Fact(fact_id = row.id, context_1= row.context_1, context_2 =row.context_2, answer=row.answer, chosen_context=row.question, question=row.question, encounter_2=False))
	
	# Add some study facts to the model (you could also read them from a CSV file)
	# facts = [Fact(1, "hello", "bonjour"),
	# 		Fact(2, "dog", "chien"),
	# 		Fact(3, "cat", "chat"),
	# 		Fact(4, "computer", "ordinateur"),
	# 		Fact(5, "house", "maison"),
	# 		Fact(6, "car", "voiture"),
	# 		Fact(7, "fish", "poisson"),
	# 		Fact(8, "bottle", "bouteille")]
	
	
			# facts = [Fact(fact_id=1, question='vergeten', context_1="Ben je nou alweer je sleutel 'vergeten'?", context_2="Sorry, we waren 'vergeten' de wiki aan te passen.", answer='forget', chosen_context="Ben je nou alweer je sleutel 'vergeten'?"),
	#  Fact(fact_id=2, question='vervelend', context_1="Ik vind het 'vervelend' als de koffie op is.", context_2="Doe eens niet zo 'vervelend'.", answer='annoying', chosen_context="Ik vind het 'vervelend' als de koffie op is."),
	#  Fact(fact_id=3, question='algemeen', context_1="Dat is niet 'algemeen' bekend.", context_2="Over het 'algemeen' ben ik hier heel goed in.", answer='general', chosen_context="Dat is niet 'algemeen' bekend."),
	#  Fact(fact_id=4, question='matig', context_1="De burger smaakte een beetje 'matig'.", context_2="Ik ben 'matig' enthousiast over deze activiteit.", answer='mediocre', chosen_context="De burger smaakte een beetje 'matig'."),
	#  Fact(fact_id=5, question='verwachten', context_1="Ze 'verwachten' dat het morgen gaat regenen.", context_2="Wij 'verwachten' dat jij het goed gaat doen.", answer='expect', chosen_context="Ze 'verwachten' dat het morgen gaat regenen."),
	#  Fact(fact_id=6, question='gemiddeld', context_1="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar.", context_2="De temperatuur in Nederland is 'gemiddeld' 15 graden.", answer='average', chosen_context="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar."),
	#  Fact(fact_id=7, question='onderdeel', context_1="Ik mis een 'onderdeel' van mijn IKEA kast.", context_2="Deze opleiding is een 'onderdeel' van de Rijksuniversiteit Groningen.", answer='part', chosen_context="Ik mis een 'onderdeel' van mijn IKEA kast."),
	# facts = [Fact(fact_id=8, question='meningen', context_1="Politici hebben altijd veel 'meningen'.", context_2="Ik heb verschillende 'meningen' over dit onderwerp.", answer='opinions', chosen_context="Politici hebben altijd veel 'meningen'."),
	#  Fact(fact_id=9, question='alternatief', context_1="Ik vind thee geen goed 'alternatief' voor koffie.", context_2="Ik heb een 'alternatief' voorstel.", answer='alternative', chosen_context="Ik vind thee geen goed 'alternatief' voor koffie."),
	#  Fact(fact_id=10, question='woordenschat', context_1="Ik heb een goede 'woordenschat'.", context_2="Een boek lezen doet wonderen voor je 'woordenschat'.", answer='vocabulary', chosen_context="Ik heb een goede 'woordenschat'.")]
	
	# for fact in facts:
	# 	m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	import numpy as np
	import re
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	Fact = namedtuple("Fact", "fact_id, question, context_1, context_2, answer, chosen_context, encounter_2")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	class SpacingModel_bs(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    WORD_THRESHOLD = 0.29
	    CONTEXT2_THRESHOLD = 0.35
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	    
	    def decide_context(self, fact, current_time):
	        """
	        Changes the cosen context to word if the activation is above the switch threshold, 
	        and back to context if it is below the threshold 
	        """
	        return fact
	    
	    
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """ 
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 2:
	            last_response = self.responses[-1]
	            print("less than 2 facts ")
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a)in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            weakest_fact_info = self.decide_context(weakest_fact[0], current_time)
	            #return((weakest_fact[0], False))
	            return((weakest_fact_info, False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 2:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        #chosen_context_id, chosen_context_found = self.decide_context(response.fact.context_1, response.fact.context_2)
	        # response.fact.chosen_context = chosen_context_id
	        # reading_time = self.get_reading_time(response.fact.question)
	        reading_time = self.get_reading_time(response.fact.chosen_context)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	
	        #chosen_context_id, chosen_context_found = self.decide_context(fact.context_1, fact.context_2)
	        reading_time = self.get_reading_time(fact.chosen_context)
	        # reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    
	class UIFeatures_bs(SpacingModel_bs):
	    """
	    Separating UI Specific Functions in a different class for readability and efficiency
	    """
	    def __init__(self) -> None:
	        super().__init__()
	        # self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_dict = dict(zip(self.vocab_df["question"].values, self.vocab_df["answer"].values)) # word: translation pairs
	        self.reverse_vocab_dict = dict(zip(self.vocab_df["answer"].values, self.vocab_df["question"].values)) # translation:word pairs
	
	    def word_from_context(self, context):
	        """
	        Extract the required word from the context. 
	        Eg:
	        "Deze opleiding heeft 'gemiddeld' 60 studenten per jaar." -> 'gemiddeld'
	        """
	        return re.findall("'.*'", context)[-1].replace("'","")
	    
	    def ret_translated_word(self, word):
	        """
	        Return the translation of the word from the dataframe. eg: English <-> Dutch 
	        """
	        try:
	            return self.vocab_dict[word]
	        except KeyError:
	            return self.reverse_vocab_dict[word]
	        else:
	            print("Wrong word. Not in dict")
	    
	    def ret_translated_context(self, context):
	        """
	        Finds the word from the annotated context and return the translation of the word from the dataframe
	        """
	
	        return self.ret_translated_word(self.word_from_context(context=context))
	    
	    def calc_rof(self,row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	        
	    def calc_reading_time(self,row):
	        return(self.get_reading_time(row["fact"].context_1))
	    
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        dat = self.create_statistics()
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	    
	    def achievement(self):
	        """
	        All stats for user achievements
	        """
	        dat = self.create_statistics()
	        correct, wrong = dat["correct"].value_counts().values
	        mean_correct = correct/(correct+wrong)
	        mean_wrong = wrong/(correct+wrong)
	
	        return f"""
	        \n
	        Trial Index : {dat.index}\r
	        Total Correct : {correct}\r
	        Total Wrong : {wrong}\r
	        Mean Correct : {mean_correct}\r
	        Mean Wrong : {mean_wrong}\r
	        """
	
	
	    def create_statistics(self):
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        # dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
	        dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
	        dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
	        # dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        return dat
	__end__

define loop baseline_test
	set source_file ""
	set source table
	set repeat 999
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[test_bs] = yes"
	setcycle 0 empty_column ""
	run baseline_test_sequence

define inline_script baseline_test_1
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Textbox coordinates
	n1 = -125,125
	n2 = 125,125
	n3 = 125,75
	n4 = -125,75
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
		
	# Get next fact from the model
	#next_fact, new = m.get_next_fact(current_time = trial_start_time)
	#next_fact = df.iloc[var.trial_num]['question']
	#prompt = next_fact.question
	
	#seen_facts = m1.get_seen_facts(current_time = trial_start_time)
	
	
	#if (var.trial_num_baseline == len(df1)-1):
	#	var.time_up = True
	
	 
	
		
	
	#prompt = df.iloc[var.pretest_num-1]['question']
	# prompt = var.seen_facts_bs[var.test_num_bs-1][0].question
	# answer = var.seen_facts_bs[var.test_num_bs-1][0].answer.split(";")
	
	prompt = var.seen_facts_bs[var.test_num_bs-1].question
	answer = var.seen_facts_bs[var.test_num_bs-1].answer.split(";")
	
	#answer = df.iloc[var.pretest_num-1]['answer'].split(";")
	print(answer)
	#delimiter ;
	word = Word(var.test_num_bs, prompt, answer)
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30)
	#if new:
	#	my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=100, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
	#	if new:
	#		my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 100)
	
		#my_canvas['achi'] = polygon([a1, a2, a3, a4], fill=True, color="white")
		my_canvas.prepare()
		my_canvas.show()
		
	
	# Check if the response is correct
	if [keyboard_response == x for x in answer].count(True) >0:
		correct = True
	else:
		correct = False
	
	# Log response
	response = Response(word, trial_start_time, rt, correct)
	d_bs.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color=feedback_color)
	my_canvas.text(keyboard_response, y = 100, color="white")
	
	
	# def create_statistics(responses):
	# 	dat_resp = pd.DataFrame(responses)
	# 	dat_facts = pd.DataFrame([r.fact for r in responses])
	# 	dat = pd.concat([dat_resp, dat_facts], axis = 1)
	# 	dat.drop(columns = "fact", inplace = True)
	
		# # Add trial number column
		# dat.index.name = "trial"
		# dat.index = dat.index + 1
	
		# return dat
	
	
	if correct:
		my_canvas.text("Correct!", y=150, color="green")
	if not correct:
		my_canvas.text(answer[0], y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	
	if (var.test_num_bs == len(var.seen_facts_bs)):
		var.test_bs = True
		
	# Increment trial number
	var.test_num_bs += 1
	__end__
	set _prepare ""

define sequence baseline_test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run baseline_test_1 always

define inline_script con_test
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Textbox coordinates
	n1 = -125,125
	n2 = 125,125
	n3 = 125,75
	n4 = -125,75
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
		
	# Get next fact from the model
	#next_fact, new = m.get_next_fact(current_time = trial_start_time)
	#next_fact = df.iloc[var.trial_num]['question']
	#prompt = next_fact.question
	
	#seen_facts = m1.get_seen_facts(current_time = trial_start_time)
	
	
	#if (var.trial_num_baseline == len(df1)-1):
	#	var.time_up = True
	
	 
	
		
	
	#prompt = df.iloc[var.pretest_num-1]['question']
	# prompt = var.seen_facts_con[var.test_num_con-1][0].question
	# answer = var.seen_facts_con[var.test_num_con-1][0].answer.split(";")
	prompt = var.seen_facts_con[var.test_num_con-1].question
	answer = var.seen_facts_con[var.test_num_con-1].answer.split(";")
	#answer = df.iloc[var.pretest_num-1]['answer'].split(";")
	print(answer)
	#delimiter ;
	word = Word(var.test_num_con, prompt, answer)
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30)
	#if new:
	#	my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=100, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
	#	if new:
	#		my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 100)
	
		#my_canvas['achi'] = polygon([a1, a2, a3, a4], fill=True, color="white")
		my_canvas.prepare()
		my_canvas.show()
		
	
	# Check if the response is correct
	if [keyboard_response == x for x in answer].count(True) >0:
		correct = True
	else:
		correct = False
	
	# Log response
	response = Response(word, trial_start_time, rt, correct)
	d_bs.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color=feedback_color)
	my_canvas.text(keyboard_response, y = 100, color="white")
	
	
	# def create_statistics(responses):
	# 	dat_resp = pd.DataFrame(responses)
	# 	dat_facts = pd.DataFrame([r.fact for r in responses])
	# 	dat = pd.concat([dat_resp, dat_facts], axis = 1)
	# 	dat.drop(columns = "fact", inplace = True)
	
		# # Add trial number column
		# dat.index.name = "trial"
		# dat.index = dat.index + 1
	
		# return dat
	
	
	if correct:
		my_canvas.text("Correct!", y=150, color="green")
	if not correct:
		my_canvas.text(answer[0], y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	if (var.test_num_con == len(var.seen_facts_con)):
		var.test_con = True
	
	# Increment trial number
	var.test_num_con += 1
	__end__
	set _prepare ""

define loop con_test_
	set source_file ""
	set source table
	set repeat 999
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[test_con] = yes"
	setcycle 0 empty_column ""
	run con_test_sequence

define sequence con_test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run con_test always

define sequence context_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_1 always
	run Context_condition always
	run instructions_distraction_1 always
	run distraction_task_1 always
	run instructions_test_1 always
	run con_test_ always

define sequence distraction_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_distraction_1 always

define sequence distraction_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_distraction_1_2 always

define loop distraction_task
	set source_file ""
	set source table
	set repeat 10
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run distraction_sequence

define loop distraction_task_1
	set source_file ""
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run distraction_sequence_1

define sequence expSequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inner_baseline "[condition]=A"
	run inner_context "[condition]=B"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome always
	run learning_session_setup_1 always
	run test_setup always
	run Pre_experiment always
	run slimstampen_setup always
	run slimstampen_bs_setup always
	run experiment_loop always
	run save_data always

define loop experiment_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition A
	setcycle 1 condition B
	run expSequence

define sequence inner_baseline
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Baseline_loop always

define sequence inner_baseline_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sequence inner_context
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Context_loop always

define sequence inner_context_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="<br />In a moment, you will be presented with words in Dutch.<br /><br />Please translate the word to English. <br /><br />You can take a break now if you want to.<br /><br />Press any key to begin." x=0 y=0 z_index=0

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="<br />In a moment, you will be presented with sentences and words. <br /><br />If you are presented with a sentence, please translate the word in bold to English. <br /><br />If you are presented with a word, please translate the word to English. <br /><br />You can take a break now if you want to.<br /><br />Press any key to begin." x=0 y=0 z_index=0

define sketchpad instructions_distraction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="For the next few trials, you will be shown a screen with both blue and red dots. <br />Count the blue dots on the screen. When you finish counting, type the number and press enter. <br /><br />Press any key to begin." x=0 y=0 z_index=0

define sketchpad instructions_distraction_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="For the next few trials, you will be shown a screen with both blue and red dots. <br />Count the blue dots on the screen. When you finish counting, type the number and press enter. <br /><br />Press any key to begin." x=0 y=0 z_index=0

define sketchpad instructions_test
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="We will now test you on the words you learned.<br /><br />Please try your best to translate the the words into English.<br /><br />Press any key to begin. <br />" x=0 y=0 z_index=0

define sketchpad instructions_test_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="We will now test you on the words you learned.<br /><br />Please try your best to translate the the words into English.<br /><br />Press any key to begin. <br />" x=0 y=0 z_index=0

define sketchpad instructions_test_level
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="Before we start our experiment, we want to asses your level in Dutch.<br /><br />Please try to translate the following words into English.<br /><br />Press any key to begin. <br />" x=0 y=0 z_index=0

define form_text_input language
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var Language
	set form_title Language
	set form_question "What is your native language? "
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	var.test_done = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	var.pretest_num = 1
	
	# Settings
	#var.session_duration = 10000
	var.session_duration = 20000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	__end__
	set _prepare ""

define inline_script learning_session_setup_1
	set description "Executes Python code"
	___run__
	# Start the clock
	import pandas as pd
	
	var.pretest_start_time = clock.time()
	var.session_start_time = clock.time()
	var.feedback_duration = 1200
	# var.feedback_duration = 100
	var.inter_trial_interval = 200
	# var.inter_trial_interval = 100
	
	var.time_up = False
	var.time_up2 = False
	var.test_done = False
	var.test_con = False
	var.test_bs = False
	var.seen_facts_bs = []
	var.seen_facts_con = []
	
	var.num_words_tested = 0
	var.num_tested_correct = 0
	var.num_words_tested_1 = 0
	var.num_tested_correct_1 = 0
	
	# Keep track of trial number
	var.trial_num = 1
	var.trial_num_baseline = 1
	var.test_num_con = 1
	var.test_num_bs = 1
	var.pretest_num = 1
	
	df = pd.read_csv(pool[u"vocabulary_marked.csv"])
	df1 = df[0:math.floor(len(df)/2)]
	df2 = df[math.floor(len(df)/2):len(df)-1]
	df1 = df1.sample(frac=1)
	df2 = df2.sample(frac=1)
	df1['id'] = np.arange(1, len(df1)+1)
	df2['id'] = np.arange(1, len(df1)+1)
	df_total = [df1, df2]
	random.shuffle(df_total)
	df_first = df_total[0]
	df_second = df_total[1]
	__end__
	set _prepare ""

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "What is the highest level you achieved by taking a course:"
	__options__
	A1
	A2
	B1
	B2
	I haven't taken any courses
	__end__
	set margins "50;50;50;50"
	set form_var Level
	set form_title Level
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes
	log data

define loop pre_test
	set source_file ""
	set source table
	set repeat 999
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[test_done] = yes"
	setcycle 0 empty_column ""
	run test_sequence

define inline_script present_distraction_1
	set description "Executes Python code"
	___run__
	# Textbox coordinates
	n1 = -125,300
	n2 = 125,300
	n3 = 125,250
	n4 = -125,250
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
		
	prompt = 'Count the number of blue dots'
	nr_of_dots = random.randint(10,20)
	nr_distract = random.randint(10,30)
	dot = u'\u2022'
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30, y = -250)
	for i in range(nr_of_dots):
		f_size = random.randint(20,50)
		y_random = random.randint(-200,200)
		x_random = random.randint(-400,400)
		my_canvas.text(dot, font_size = f_size, y = y_random, x = x_random, color='blue')
			
	for i in range(nr_distract):
		f_size = random.randint(20,50)
		y_random = random.randint(-200,200)
		x_random = random.randint(-400,400)
		my_canvas.text(dot, font_size = f_size, y = y_random, x = x_random, color='red')
			
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=275, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		#my_canvas.clear()
		my_canvas.text(prompt, font_size = 30, y=-250)
	
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 275)
	
		my_canvas.prepare()
		my_canvas.show()
		print(m.responses)
		
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	__end__
	set _prepare ""

define inline_script present_distraction_1_1
	set description "Executes Python code"
	___run__
	# Textbox coordinates
	n1 = -125,300
	n2 = 125,300
	n3 = 125,250
	n4 = -125,250
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
		
	prompt = 'Count the number of blue dots'
	nr_of_dots = random.randint(20,40)
	nr_distract = random.randint(10,30)
	dot = u'\u2022'
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30, y = -250)
	for i in range(nr_of_dots):
		f_size = random.randint(20,50)
		y_random = random.randint(-200,200)
		x_random = random.randint(-400,400)
		my_canvas.text(dot, font_size = f_size, y = y_random, x = x_random, color='blue')
			
	for i in range(nr_distract):
		f_size = random.randint(20,50)
		y_random = random.randint(-200,200)
		x_random = random.randint(-400,400)
		my_canvas.text(dot, font_size = f_size, y = y_random, x = x_random, color='red')
			
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=275, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30, y=-250)
	
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 275)
	
		my_canvas.prepare()
		my_canvas.show()
		print(m.responses)
		
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	__end__
	set _prepare ""

define inline_script present_distraction_1_2
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script present_trial
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	import random
	
	# Textbox coordinates
	n1 = -125,125
	n2 = 125,125
	n3 = 125,75
	n4 = -125,75
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
	
	def is_a_test(x): #check if its a word not a sentence
		return len(x.split(" ")) ==1
	
	seen_facts = m.get_seen_facts(current_time = trial_start_time)
	
	#if (var.trial_num_baseline == len(df1)-1):
	#	var.time_up = True
	
	# if (len(seen_facts) == len(df1)-1) or var.trial_num == 5:
	# 	var.seen_facts_con = seen_facts
	# 	print(var.seen_facts_con)
	# 	var.time_up2 = True
	
	if var.trial_num == 150:
		print(var.seen_facts_con)
		random.shuffle(var.seen_facts_con)
		var.time_up2 = True
	
	# Get next fact from the model
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	
	if next((f for f in var.seen_facts_con if f.fact_id == next_fact.fact_id), None):
		print("already exists")
	else:
		var.seen_facts_con.append(next_fact)
		
	#prompt = next_fact.question
	prompt = next_fact.chosen_context
	answer = next_fact.answer.split(";") #delimiter ;
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30)
	#if new:
	#	my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=100, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	var.num_words_tested += 1
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
	#	if new:
	#		my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 100)
	
		#my_canvas['achi'] = polygon([a1, a2, a3, a4], fill=True, color="white")
		my_canvas.prepare()
		my_canvas.show()
		print(m.responses)
		
	
	
	# Check if the response is correct
	if [keyboard_response.strip() == x.strip() for x in answer].count(True) >0:
		correct = True
		var.num_tested_correct+=1
	else:
		correct = False
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	m.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color=feedback_color)
	my_canvas.text(keyboard_response, y = 100, color="white")
	# if is_a_test(prompt) == True:
	my_canvas.polygon([a1, a2, a3, a4], fill=True, color="white")
	
	
	def create_statistics(responses):
		dat_resp = pd.DataFrame(responses)
		dat_facts = pd.DataFrame([r.fact for r in responses])
		dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
		# Add column for rate of forgetting estimate after each observation
		#dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
		#dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
		#dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
		# dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
		dat.drop(columns = "fact", inplace = True)
	
		# Add trial number column
		dat.index.name = "trial"
		dat.index = dat.index + 1
	
		return dat
	
	def achievement(responses,num_words_tested,num_tested_correct):
	
		"""
		All stats for user achievements
		"""
		dat = create_statistics(responses)
		correct, wrong = 0,0
		try:
			correct, wrong = dat["correct"].value_counts().values
		except:
			correct = dat["correct"].value_counts()
		mean_correct = correct/(correct+wrong)
		mean_wrong = wrong/(correct+wrong)
		
		correct = num_tested_correct
		wrong = num_words_tested - num_tested_correct
		return f"{int(correct)}/{int(num_words_tested)} so far!!"
		# return f"{int(mean_correct)}/{int(mean_correct+mean_wrong)} so far!!"
	
		# return f"""
		#     Trial Index : {str(dat.index)}\r
		#     Total Correct : {correct}\r
		#     Total Wrong : {wrong}\r
		#     Mean Correct : {mean_correct}\r
		#     Mean Wrong : {mean_wrong}\r
		#     """
	ach = None
	try:
		ach = achievement(m.responses, var.num_words_tested,var.num_tested_correct)
	except Exception as e:
		print(e)
	if ach!=None:
		my_canvas.text(ach, y = -175)
	
	if correct:
		my_canvas.text("Correct!", y=150, color="green")
		# if is_a_test(prompt) == True:
	if not correct:
		my_canvas.text(answer[0], y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script present_trial_1
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	import random
	
	# Textbox coordinates
	n1 = -125,125
	n2 = 125,125
	n3 = 125,75
	n4 = -125,75
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
	
	#seen_facts = m1.get_seen_facts(current_time = trial_start_time)
	
	#if (var.trial_num_baseline == len(df1)-1):
	#	var.time_up = True
	
	# if (len(seen_facts) == len(df1)-1) or var.trial_num_baseline == 5:
	# 	var.seen_facts_bs = seen_facts
	# 	print(var.seen_facts_bs)
	# 	var.time_up = True
		
	if var.trial_num_baseline == 150:
		print(var.seen_facts_bs)
		random.shuffle(var.seen_facts_bs)
		var.time_up = True
		
	
	# Get next fact from the model
	next_fact, new = m1.get_next_fact(current_time = trial_start_time)
	
	if next((f for f in var.seen_facts_bs if f.fact_id == next_fact.fact_id), None):
		print("already exists")
	else:
		var.seen_facts_bs.append(next_fact)
	
	#prompt = next_fact.question
	prompt = next_fact.chosen_context
	answer = next_fact.answer.split(";") #delimiter ;
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30)
	#if new:
	#	my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=100, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	var.num_words_tested_1+=1
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
	#	if new:
	#		my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 100)
	
		#my_canvas['achi'] = polygon([a1, a2, a3, a4], fill=True, color="white")
		my_canvas.prepare()
		my_canvas.show()
		
	
	
	# Check if the response is correct
	if [keyboard_response.strip() == x.strip() for x in answer].count(True) >0:
		correct = True
		var.num_tested_correct_1+=1
	else:
		correct = False
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	m1.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color=feedback_color)
	my_canvas.text(keyboard_response, y = 100, color="white")
	my_canvas.polygon([a1, a2, a3, a4], fill=True, color="white")
	
	def create_statistics(responses):
		dat_resp = pd.DataFrame(responses)
		dat_facts = pd.DataFrame([r.fact for r in responses])
		dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
		# Add column for rate of forgetting estimate after each observation
		#dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
		#dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
		#dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
		# dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
		dat.drop(columns = "fact", inplace = True)
	
		# Add trial number column
		dat.index.name = "trial"
		dat.index = dat.index + 1
	
		return dat
	
	def achievement(responses,num_words_tested,num_tested_correct):
		"""
		All stats for user achievements
		"""
		dat = create_statistics(responses)
		correct, wrong = 0,0
		try:
			correct, wrong = dat["correct"].value_counts().values
		except:
			correct = dat["correct"].value_counts()
		mean_correct = correct/(correct+wrong)
		mean_wrong = wrong/(correct+wrong)
		# return f"{int(correct)}/{int(correct+wrong)} so far!!"
		correct = num_tested_correct
		wrong = num_words_tested - num_tested_correct
		return f"{int(correct)}/{int(num_words_tested)} so far!!"
	
		# return f"""
		#     Trial Index : {str(dat.index)}\r
		#     Total Correct : {correct}\r
		#     Total Wrong : {wrong}\r
		#     Mean Correct : {mean_correct}\r
		#     Mean Wrong : {mean_wrong}\r
		#     """
	ach = None
	try:
		ach = achievement(m1.responses,var.num_words_tested_1,var.num_tested_correct_1)
	except Exception as e:
		print(e)
	if ach!=None:
		my_canvas.text(ach, y = -175)
	
	if correct:
		my_canvas.text("Correct!", y=150, color="green")
	if not correct:
		my_canvas.text(answer[0], y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Increment trial number
	var.trial_num_baseline += 1
	__end__
	set _prepare ""

define inline_script save_data
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = m.export_data()
	log.write(dat)
	
	dat1 = m1.export_data()
	log.write(dat1)
	
	dat2 = d_bs.export_data()
	log.write(dat2)
	
	dat3 = d_con.export_data()
	log.write(dat3)
	__end__
	set _prepare ""

define inline_script save_data_1
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	data = d.export_data()
	log.write(data)
	__end__
	set _prepare ""

define inline_script shuffling
	set description "Executes Python code"
	___run__
	from random import shuffle
	block_list = [0,1]
	shuffle(block_list)
	b0 = block_list[0]
	b1 = block_list[1]
	exp.set('b0',b0)
	exp.set('b1',b1)
	__end__
	set _prepare ""

define inline_script slimstampen_bs_setup
	set description "Executes Python code"
	___run__
	import pandas as pd
	m1 = UIFeatures_bs()
	# df = pd.read_table("./vocabulary_marked.csv", names=["id","context_1", "context_2", "answer"], index_col=0, sep = ",", lineterminator='\n')
	#df = pd.read_csv(pool[u"vocabulary_marked.csv"
	df = df_second
	for row in df.itertuples():
	    m1.add_fact(Fact(fact_id = row.id, context_1= row.context_1, context_2 =row.context_2, answer=row.answer, chosen_context=row.question, question=row.question, encounter_2=False))
	
	# Add some study facts to the model (you could also read them from a CSV file)
	# facts = [Fact(1, "hello", "bonjour"),
	# 		Fact(2, "dog", "chien"),
	# 		Fact(3, "cat", "chat"),
	# 		Fact(4, "computer", "ordinateur"),
	# 		Fact(5, "house", "maison"),
	# 		Fact(6, "car", "voiture"),
	# 		Fact(7, "fish", "poisson"),
	# 		Fact(8, "bottle", "bouteille")]
	
	
			# facts = [Fact(fact_id=1, question='vergeten', context_1="Ben je nou alweer je sleutel 'vergeten'?", context_2="Sorry, we waren 'vergeten' de wiki aan te passen.", answer='forget', chosen_context="Ben je nou alweer je sleutel 'vergeten'?"),
	#  Fact(fact_id=2, question='vervelend', context_1="Ik vind het 'vervelend' als de koffie op is.", context_2="Doe eens niet zo 'vervelend'.", answer='annoying', chosen_context="Ik vind het 'vervelend' als de koffie op is."),
	#  Fact(fact_id=3, question='algemeen', context_1="Dat is niet 'algemeen' bekend.", context_2="Over het 'algemeen' ben ik hier heel goed in.", answer='general', chosen_context="Dat is niet 'algemeen' bekend."),
	#  Fact(fact_id=4, question='matig', context_1="De burger smaakte een beetje 'matig'.", context_2="Ik ben 'matig' enthousiast over deze activiteit.", answer='mediocre', chosen_context="De burger smaakte een beetje 'matig'."),
	#  Fact(fact_id=5, question='verwachten', context_1="Ze 'verwachten' dat het morgen gaat regenen.", context_2="Wij 'verwachten' dat jij het goed gaat doen.", answer='expect', chosen_context="Ze 'verwachten' dat het morgen gaat regenen."),
	#  Fact(fact_id=6, question='gemiddeld', context_1="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar.", context_2="De temperatuur in Nederland is 'gemiddeld' 15 graden.", answer='average', chosen_context="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar."),
	#  Fact(fact_id=7, question='onderdeel', context_1="Ik mis een 'onderdeel' van mijn IKEA kast.", context_2="Deze opleiding is een 'onderdeel' van de Rijksuniversiteit Groningen.", answer='part', chosen_context="Ik mis een 'onderdeel' van mijn IKEA kast."),
	# facts = [Fact(fact_id=8, question='meningen', context_1="Politici hebben altijd veel 'meningen'.", context_2="Ik heb verschillende 'meningen' over dit onderwerp.", answer='opinions', chosen_context="Politici hebben altijd veel 'meningen'."),
	#  Fact(fact_id=9, question='alternatief', context_1="Ik vind thee geen goed 'alternatief' voor koffie.", context_2="Ik heb een 'alternatief' voorstel.", answer='alternative', chosen_context="Ik vind thee geen goed 'alternatief' voor koffie."),
	#  Fact(fact_id=10, question='woordenschat', context_1="Ik heb een goede 'woordenschat'.", context_2="Een boek lezen doet wonderen voor je 'woordenschat'.", answer='vocabulary', chosen_context="Ik heb een goede 'woordenschat'.")]
	
	# for fact in facts:
	# 	m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	import numpy as np
	import re
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	Fact = namedtuple("Fact", "fact_id, question, context_1, context_2, answer, chosen_context, encounter_2")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	class SpacingModel_bs(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    WORD_THRESHOLD = 0.29
	    CONTEXT2_THRESHOLD = 0.35
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	    
	    def decide_context(self, fact, current_time):
	        """
	        Changes the cosen context to word if the activation is above the switch threshold, 
	        and back to context if it is below the threshold 
	        """
	
	        return fact
	    
	    
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	        
	    def get_seen_facts(self, current_time):
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        return seen_facts
	
	        
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """ 
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 1:
	            last_response = self.responses[-1]
	            print("less than 2 facts ")
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a)in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            weakest_fact_info = self.decide_context(weakest_fact[0], current_time)
	            #return((weakest_fact[0], False))
	            return((weakest_fact_info, False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 2:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        #chosen_context_id, chosen_context_found = self.decide_context(response.fact.context_1, response.fact.context_2)
	        # response.fact.chosen_context = chosen_context_id
	        # reading_time = self.get_reading_time(response.fact.question)
	        reading_time = self.get_reading_time(response.fact.chosen_context)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	
	        #chosen_context_id, chosen_context_found = self.decide_context(fact.context_1, fact.context_2)
	        reading_time = self.get_reading_time(fact.chosen_context)
	        # reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 2:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    
	class UIFeatures_bs(SpacingModel_bs):
	    """
	    Separating UI Specific Functions in a different class for readability and efficiency
	    """
	    def __init__(self) -> None:
	        super().__init__()
	        # self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_dict = dict(zip(self.vocab_df["question"].values, self.vocab_df["answer"].values)) # word: translation pairs
	        self.reverse_vocab_dict = dict(zip(self.vocab_df["answer"].values, self.vocab_df["question"].values)) # translation:word pairs
	
	    def word_from_context(self, context):
	        """
	        Extract the required word from the context. 
	        Eg:
	        "Deze opleiding heeft 'gemiddeld' 60 studenten per jaar." -> 'gemiddeld'
	        """
	        return re.findall("'.*'", context)[-1].replace("'","")
	    
	    def ret_translated_word(self, word):
	        """
	        Return the translation of the word from the dataframe. eg: English <-> Dutch 
	        """
	        try:
	            return self.vocab_dict[word]
	        except KeyError:
	            return self.reverse_vocab_dict[word]
	        else:
	            print("Wrong word. Not in dict")
	    
	    def ret_translated_context(self, context):
	        """
	        Finds the word from the annotated context and return the translation of the word from the dataframe
	        """
	
	        return self.ret_translated_word(self.word_from_context(context=context))
	    
	    def calc_rof(self,row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	        
	    def calc_reading_time(self,row):
	        return(self.get_reading_time(row["fact"].context_1))
	    
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        dat = self.create_statistics()
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	    
	    def achievement(self):
	        """
	        All stats for user achievements
	        """
	        dat = self.create_statistics()
	        correct, wrong = dat["correct"].value_counts().values
	        mean_correct = correct/(correct+wrong)
	        mean_wrong = wrong/(correct+wrong)
	
	        return f"""
	        \n
	        Trial Index : {dat.index}\r
	        Total Correct : {correct}\r
	        Total Wrong : {wrong}\r
	        Mean Correct : {mean_correct}\r
	        Mean Wrong : {mean_wrong}\r
	        """
	
	
	    def create_statistics(self):
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        # dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
	        dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
	        dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
	        # dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        return dat
	__end__

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	import pandas as pd
	m = UIFeatures()
	# df = pd.read_table("./vocabulary_marked.csv", names=["id","context_1", "context_2", "answer"], index_col=0, sep = ",", lineterminator='\n')
	df = df_first
	
	for row in df.itertuples():
	    m.add_fact(Fact(fact_id = row.id, context_1= row.context_1, context_2 =row.context_2, answer=row.answer, chosen_context=row.context_1, question=row.question, encounter_2=False))
	
	# Add some study facts to the model (you could also read them from a CSV file)
	# facts = [Fact(1, "hello", "bonjour"),
	# 		Fact(2, "dog", "chien"),
	# 		Fact(3, "cat", "chat"),
	# 		Fact(4, "computer", "ordinateur"),
	# 		Fact(5, "house", "maison"),
	# 		Fact(6, "car", "voiture"),
	# 		Fact(7, "fish", "poisson"),
	# 		Fact(8, "bottle", "bouteille")]
	
	
			# facts = [Fact(fact_id=1, question='vergeten', context_1="Ben je nou alweer je sleutel 'vergeten'?", context_2="Sorry, we waren 'vergeten' de wiki aan te passen.", answer='forget', chosen_context="Ben je nou alweer je sleutel 'vergeten'?"),
	#  Fact(fact_id=2, question='vervelend', context_1="Ik vind het 'vervelend' als de koffie op is.", context_2="Doe eens niet zo 'vervelend'.", answer='annoying', chosen_context="Ik vind het 'vervelend' als de koffie op is."),
	#  Fact(fact_id=3, question='algemeen', context_1="Dat is niet 'algemeen' bekend.", context_2="Over het 'algemeen' ben ik hier heel goed in.", answer='general', chosen_context="Dat is niet 'algemeen' bekend."),
	#  Fact(fact_id=4, question='matig', context_1="De burger smaakte een beetje 'matig'.", context_2="Ik ben 'matig' enthousiast over deze activiteit.", answer='mediocre', chosen_context="De burger smaakte een beetje 'matig'."),
	#  Fact(fact_id=5, question='verwachten', context_1="Ze 'verwachten' dat het morgen gaat regenen.", context_2="Wij 'verwachten' dat jij het goed gaat doen.", answer='expect', chosen_context="Ze 'verwachten' dat het morgen gaat regenen."),
	#  Fact(fact_id=6, question='gemiddeld', context_1="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar.", context_2="De temperatuur in Nederland is 'gemiddeld' 15 graden.", answer='average', chosen_context="Deze opleiding heeft 'gemiddeld' 60 studenten per jaar."),
	#  Fact(fact_id=7, question='onderdeel', context_1="Ik mis een 'onderdeel' van mijn IKEA kast.", context_2="Deze opleiding is een 'onderdeel' van de Rijksuniversiteit Groningen.", answer='part', chosen_context="Ik mis een 'onderdeel' van mijn IKEA kast."),
	# facts = [Fact(fact_id=8, question='meningen', context_1="Politici hebben altijd veel 'meningen'.", context_2="Ik heb verschillende 'meningen' over dit onderwerp.", answer='opinions', chosen_context="Politici hebben altijd veel 'meningen'."),
	#  Fact(fact_id=9, question='alternatief', context_1="Ik vind thee geen goed 'alternatief' voor koffie.", context_2="Ik heb een 'alternatief' voorstel.", answer='alternative', chosen_context="Ik vind thee geen goed 'alternatief' voor koffie."),
	#  Fact(fact_id=10, question='woordenschat', context_1="Ik heb een goede 'woordenschat'.", context_2="Een boek lezen doet wonderen voor je 'woordenschat'.", answer='vocabulary', chosen_context="Ik heb een goede 'woordenschat'.")]
	
	# for fact in facts:
	# 	m.add_fact(fact)
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	import numpy as np
	import re
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	Fact = namedtuple("Fact", "fact_id, question, context_1, context_2, answer, chosen_context, encounter_2")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    WORD_THRESHOLD = 0.29
	    CONTEXT2_THRESHOLD = 0.35
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	    
	    def decide_context(self, fact, current_time):
	        """
	        Changes the cosen context to word if the activation is above the switch threshold, 
	        and back to context if it is below the threshold 
	        """
	        alpha = self.get_rate_of_forgetting(current_time, fact)
	
	        if alpha <= self.WORD_THRESHOLD:
	            fact = fact._replace(chosen_context = fact.question)
	        
	        elif alpha < self.CONTEXT2_THRESHOLD and fact.encounter_2 == False:
	            fact = fact._replace(chosen_context = fact.context_1)
	            
	        
	        else:
	            fact = fact._replace(chosen_context = fact.context_2)
	            self.facts[fact.fact_id-1] = fact._replace(encounter_2 = True)
	
	        return fact
	    
	    
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	    def get_seen_facts(self, current_time):
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        return seen_facts
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """ 
	        # Calculate all fact activations in the near future
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	        # Prevent an immediate repetition of the same fact
	        if len(seen_facts) > 1:
	            last_response = self.responses[-1]
	            print("less than 2 facts ")
	            seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	        # Reinforce the weakest fact with an activation below the threshold
	        seen_facts_below_threshold = [(f, a) for (f, a)in seen_facts if a < self.FORGET_THRESHOLD]
	        if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	            weakest_fact = min(seen_facts, key = lambda t: t[1])
	            weakest_fact_info = self.decide_context(weakest_fact[0], current_time)
	            #return((weakest_fact[0], False))
	            return((weakest_fact_info, False))
	
	        # If none of the previously seen facts has an activation below the threshold, return a new fact
	        return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 2:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        #chosen_context_id, chosen_context_found = self.decide_context(response.fact.context_1, response.fact.context_2)
	        # response.fact.chosen_context = chosen_context_id
	        # reading_time = self.get_reading_time(response.fact.question)
	        reading_time = self.get_reading_time(response.fact.chosen_context)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	
	        #chosen_context_id, chosen_context_found = self.decide_context(fact.context_1, fact.context_2)
	        reading_time = self.get_reading_time(fact.chosen_context)
	        # reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 2:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    
	class UIFeatures(SpacingModel):
	    """
	    Separating UI Specific Functions in a different class for readability and efficiency
	    """
	    def __init__(self) -> None:
	        super().__init__()
	        # self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_dict = dict(zip(self.vocab_df["question"].values, self.vocab_df["answer"].values)) # word: translation pairs
	        self.reverse_vocab_dict = dict(zip(self.vocab_df["answer"].values, self.vocab_df["question"].values)) # translation:word pairs
	
	    def word_from_context(self, context):
	        """
	        Extract the required word from the context. 
	        Eg:
	        "Deze opleiding heeft 'gemiddeld' 60 studenten per jaar." -> 'gemiddeld'
	        """
	        return re.findall("'.*'", context)[-1].replace("'","")
	    
	    def ret_translated_word(self, word):
	        """
	        Return the translation of the word from the dataframe. eg: English <-> Dutch 
	        """
	        try:
	            return self.vocab_dict[word]
	        except KeyError:
	            return self.reverse_vocab_dict[word]
	        else:
	            print("Wrong word. Not in dict")
	    
	    def ret_translated_context(self, context):
	        """
	        Finds the word from the annotated context and return the translation of the word from the dataframe
	        """
	
	        return self.ret_translated_word(self.word_from_context(context=context))
	    
	    def calc_rof(self,row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	        
	    def calc_reading_time(self,row):
	        return(self.get_reading_time(row["fact"].context_1))
	    
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        dat = self.create_statistics()
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	    
	    def achievement(self):
	        """
	        All stats for user achievements
	        """
	        dat = self.create_statistics()
	        correct, wrong = dat["correct"].value_counts().values
	        mean_correct = correct/(correct+wrong)
	        mean_wrong = wrong/(correct+wrong)
	
	        return f"""
	        \n
	        Trial Index : {dat.index}\r
	        Total Correct : {correct}\r
	        Total Wrong : {wrong}\r
	        Mean Correct : {mean_correct}\r
	        Mean Wrong : {mean_wrong}\r
	        """
	
	
	    def create_statistics(self):
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        # dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
	        dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
	        dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
	        # dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        return dat
	__end__

define inline_script test_level
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	# Textbox coordinates
	n1 = -125,125
	n2 = 125,125
	n3 = 125,75
	n4 = -125,75
	
	a1 = 200,-200
	a2 = -200,-200
	a3 = -200,-150
	a4 = 200,-150
		
	# Get next fact from the model
	#next_fact, new = m.get_next_fact(current_time = trial_start_time)
	#next_fact = df.iloc[var.trial_num]['question']
	#prompt = next_fact.question
	
	if (var.pretest_num == len(df)-1):
		var.test_done = True
		
		
	prompt = df.iloc[var.pretest_num-1]['question']
	answer = df.iloc[var.pretest_num-1]['answer'].split(";")
	print(answer)
	#delimiter ;
	word = Word(var.pretest_num, prompt, answer)
	
	# Show prompt
	my_canvas = Canvas()
	my_canvas.text(prompt, font_size = 30)
	#if new:
	#	my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
	my_canvas.text("Type here...", font_size=30, y=100, color="gray")
	
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
	#	if new:
	#		my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.polygon([n1, n2, n3, n4], fill=True, color="white")
		my_canvas.text(keyboard_response, y = 100)
	
		#my_canvas['achi'] = polygon([a1, a2, a3, a4], fill=True, color="white")
		my_canvas.prepare()
		my_canvas.show()
		
	
	# Check if the response is correct
	if [keyboard_response == x for x in answer].count(True) >0:
		correct = True
	else:
		correct = False
	
	# Log response
	response = Response(word, trial_start_time, rt, correct)
	d.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.polygon([n1, n2, n3, n4], fill=True, color=feedback_color)
	my_canvas.text(keyboard_response, y = 100, color="white")
	
	
	# def create_statistics(responses):
	# 	dat_resp = pd.DataFrame(responses)
	# 	dat_facts = pd.DataFrame([r.fact for r in responses])
	# 	dat = pd.concat([dat_resp, dat_facts], axis = 1)
	# 	dat.drop(columns = "fact", inplace = True)
	
		# # Add trial number column
		# dat.index.name = "trial"
		# dat.index = dat.index + 1
	
		# return dat
	
	
	if correct:
		my_canvas.text("Correct!", y=150, color="green")
	if not correct:
		my_canvas.text(answer[0], y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	
	# Increment trial number
	var.pretest_num += 1
	
	
	if (var.test_done == True):
	    var.session_start_time = clock.time()
	__end__
	set _prepare ""

define sequence test_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run test_level always

define inline_script test_setup
	set description "Executes Python code"
	___run__
	import pandas as pd
	
	# df = pd.read_table("./vocabulary_marked.csv", names=["id","context_1", "context_2", "answer"], index_col=0, sep = ",", lineterminator='\n')
	#df = pd.read_csv(pool[u"vocabulary_level_test.csv"], error_bad_lines=False, encoding = 'unicode_escape')
	df = pd.read_csv(pool[u"vocabulary_level_test.csv"])
	
	d = UI()
	d_con = UI()
	d_bs = UI()
	#for row in df.itertuples():
	#    d.add_fact(Word(fact_id = row.id, question=row.question, answer=row.answer))
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	import numpy as np
	import re
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	Word = namedtuple("Word", "fact_id, question, answer")
	Response = namedtuple("Response", "word, start_time, rt, correct")
	
	class TestModel(object):
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	    
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	    def get_seen_facts(self, current_time):
	        fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	        seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	        return seen_facts
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 2:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        #chosen_context_id, chosen_context_found = self.decide_context(response.fact.context_1, response.fact.context_2)
	        # response.fact.chosen_context = chosen_context_id
	        # reading_time = self.get_reading_time(response.fact.question)
	        reading_time = self.get_reading_time(response.fact.chosen_context)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	    # def normalise_reaction_time(self, response):
	    #     # type: (Response) -> float
	    #     """
	    #     Cut off extremely long responses to keep the reaction time within reasonable bounds
	    #     """
	    #     rt = response.rt if response.correct else 60000
	    #     max_rt = self.get_max_reaction_time_for_fact(response.word)
	    #     return(min(rt, max_rt))
	
	
	    
	class UI(TestModel):
	    """
	    Separating UI Specific Functions in a different class for readability and efficiency
	    """
	    def __init__(self) -> None:
	        super().__init__()
	        # self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_df = pd.read_csv(pool[u"vocabulary_level_test.csv"]) #annotated data
	        self.vocab_dict = dict(zip(self.vocab_df["question"].values, self.vocab_df["answer"].values)) # word: translation pairs
	        self.reverse_vocab_dict = dict(zip(self.vocab_df["answer"].values, self.vocab_df["question"].values)) # translation:word pairs
	
	
	    
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        dat = self.create_statistics()
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	    
	    def achievement(self):
	        """
	        All stats for user achievements
	        """
	        dat = self.create_statistics()
	        correct, wrong = dat["correct"].value_counts().values
	        mean_correct = correct/(correct+wrong)
	        mean_wrong = wrong/(correct+wrong)
	
	        return f"""
	        \n
	        Trial Index : {dat.index}\r
	        Total Correct : {correct}\r
	        Total Wrong : {wrong}\r
	        Mean Correct : {mean_correct}\r
	        Mean Wrong : {mean_wrong}\r
	        """
	
	
	    def create_statistics(self):
	        dat_resp = pd.DataFrame(self.responses)
	        print(dat_resp)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        return dat
	__end__

define inline_script test_setup_1
	set description "Executes Python code"
	___run__
	import pandas as pd
	
	# df = pd.read_table("./vocabulary_marked.csv", names=["id","context_1", "context_2", "answer"], index_col=0, sep = ",", lineterminator='\n')
	#df = pd.read_csv(pool[u"vocabulary_level_test.csv"], encoding = 'unicode_escape')
	#df = pd.read_csv(pool[u"vocabulary_level_test.csv"], error_bad_lines=False, encoding = 'unicode_escape')
	df = pd.read_csv(pool[u"vocabulary_marked.csv"], encoding = 'unicode_escape')
	
	d = UI()
	#for row in df.itertuples():
	#    d.add_fact(Word(fact_id = row.id, question=row.question, answer=row.answer))
	__end__
	___prepare__
	from __future__ import division
	import math
	import random
	import pandas as pd
	from collections import namedtuple
	import numpy as np
	import re
	
	# Fact = namedtuple("Fact", "fact_id, question, answer")
	Word = namedtuple("Word", "fact_id, question, answer")
	Response = namedtuple("Response", "fact, start_time, rt, correct")
	
	class TestModel(object):
	
	    def __init__(self):
	        self.facts = []
	        self.responses = []
	    
	    
	    def add_fact(self, fact):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        # Ensure that a fact with this ID does not exist already
	        if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	            raise RuntimeError(
	                "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	        self.facts.append(fact)
	
	
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    
	class UI(TestModel):
	    """
	    Separating UI Specific Functions in a different class for readability and efficiency
	    """
	    def __init__(self) -> None:
	        super().__init__()
	        # self.vocab_df = pd.read_csv(pool[u"vocabulary_marked.csv"]) #annotated data
	        self.vocab_df = pd.read_csv(pool[u"vocabulary_level_test.csv"]) #annotated data
	        self.vocab_dict = dict(zip(self.vocab_df["question"].values, self.vocab_df["answer"].values)) # word: translation pairs
	        self.reverse_vocab_dict = dict(zip(self.vocab_df["answer"].values, self.vocab_df["question"].values)) # translation:word pairs
	
	
	    
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        dat = self.create_statistics()
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	    
	    def achievement(self):
	        """
	        All stats for user achievements
	        """
	        dat = self.create_statistics()
	        correct, wrong = dat["correct"].value_counts().values
	        mean_correct = correct/(correct+wrong)
	        mean_wrong = wrong/(correct+wrong)
	
	        return f"""
	        \n
	        Trial Index : {dat.index}\r
	        Total Correct : {correct}\r
	        Total Wrong : {wrong}\r
	        Mean Correct : {mean_correct}\r
	        Mean Wrong : {mean_wrong}\r
	        """
	
	
	    def create_statistics(self):
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        # dat["alpha"] = dat.apply(self.calc_rof, axis = 1)
	        dat["reading_time"] = dat.apply(self.calc_reading_time, axis =1)
	        dat["fogetting_rate"] = dat.apply(self.calc_rof, axis = 1)
	        # dat["chosen_context"] = dat.apply(chosen_context_finder, axis =1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        return dat
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial_1 always

define sketchpad welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=Lexend font_italic=no font_size=30 html=yes show_if=always text="Welcome to our study!<br />Before we start, we ask you to answer a few questions. <br /><br />Press any key to begin." x=0 y=0 z_index=0

